PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'Handedness': 'r/l', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  backgroundFit = cover
  color = -1.0000, -1.0000, -0.2471
  expName = RewardEffortLearning
  keyboardBackend = ioHub
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Routines
  Routine reward_rating
    SliderComponent reward
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little_2
      image = image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many_2
      image = image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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  Routine main_trial
    TextComponent text_6
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up!
    CodeComponent CheckKeys
      Code Type = Auto->JS
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      Begin Routine:
        #reset round score to 0
        rscore = 0
        winE=rscore+1
        npumps=0
        maxPumps=effLevel#max presses to complete a trial
        key_sequence = []  # List to store the key sequence ('z' followed by 'p')
        achieved = 0
      Each Frame:
        # Check for key presses
        keys = event.getKeys()

        if keys:
            key_pressed = keys[0]

            # Check if the key pressed is 'z' and it's the first key in the sequence
            if key_pressed == 'z' and not key_sequence:
                key_sequence.append(key_pressed)
            # Check if the key pressed is 'p' and 'z' was pressed before it
            elif key_pressed == 'p' and 'z' in key_sequence:
                key_sequence.append(key_pressed)
            # If the sequence is complete ('z' followed by 'p'), increase the size of the shape
            if key_sequence == ['z', 'p']:
                npumps += 1
                key_sequence = []  # Reset the key sequence

            # Check if the desired number of pumps has been reached
            if npumps >= maxPumps:
                achieved = True
      End Routine:
        if npumps>=maxPumps:
           rscore=rscore+1

        #add current round score to total score
        tscore += rscore

        maintask.addData('# of presses', npumps)
        maintask.addData('trial score', rscore)
    CodeComponent barSize
      Code Type = Auto->JS
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      Begin Experiment:
        batterySize=0.00
        batteryMaxSize=0.55
      Begin Routine:
        #balloon image's starting size
        batterySize=0.00
        achieved=False
        nPumps=0
        batterySizeIncr = batteryMaxSize/100
      Each Frame:
        batterySize=npumps*batterySizeIncr
    CodeComponent countdownEasy
      Code Type = Py
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(5)
            countdownStarted = True
        #7 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    ImageComponent tank
      image = TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background
      anchor = bottom-center
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = $[.15, batterySize]
      startVal [time (s)] = 0.0
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  Routine cross
    TextComponent text2_2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Instructions
    CodeComponent chooseBranch
      Code Type = Auto->JS
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      Begin Experiment:
        #Effort and Reward Learning Task
        #organized and developed for Psychopy by AL 08/25/23

        from psychopy import visual
        #initialize scoring variables
        #round score
        rscore = 0
        #total score
        tscore = 0
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(5)
            countdownStarted = True
        #5 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False
            countdownStarted = False
      End Routine:
        #Press A for easy, B for hard, otherwise chosen randomly after 5 secs
        #if trial_select=='a':
        nRepsA=1
        nRepsB=0
        countdownStarted = False
    TextComponent instrText
      letterHeight = 0.1
      pos = [0, .3]
      startVal [time (s)] = 0.0
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      text:
        Choose Your Task:

        Probability of win:

        Press A for Easy Task
        1 point
    KeyboardComponent trial_select
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = all keys
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  Routine effort_rating
    SliderComponent effort
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_effortRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How much fuel do you think you will need to get to the next planet?
    TextComponent text_effortRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent effort_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = effort.rating
      store = all keys
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    ImageComponent fuel_empty
      image [set every repeat] = fuelShipEmpty-01.png
      pos = (-0.7, -0.3)
      size = (0.3,0.5)
      startVal [time (s)] = 0.0
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    ImageComponent fuel_full
      image = fuelShipFull-01.png
      pos = (0.7, -0.3)
      size = (0.34,0.5)
      startVal [time (s)] = 0.0
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  Routine reward_rating_2
    SliderComponent reward_2
      fillColor = 1.0000, 0.6314, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.1
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [frame N] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_rewardRating_3
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        How many gold rubies do you expect on the next planet?
    TextComponent text_rewardRating_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click on the scale to indicate your rating and press ENTER to log it in.
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    KeyboardComponent login_reward_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [condition] = reward.rating
      store = all keys
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    ImageComponent coins_little
      image = stim/image1.png
      pos = (-0.6, -0.4)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent coins_many
      image = stim/image7.png
      pos = (0.7, -0.35)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
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  Routine Feedback_2
    CodeComponent checkAchieved
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        feedbackTime=3
      Begin Routine:
        if achieved==True:
            feedbackText=FeedbackText1
            crashShow=0
        else:
            feedbackText= FeedbackText2
            crashShow=1
    TextComponent feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
      text [set every repeat] = $feedbackText
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    ImageComponent image_rubies
      image [set every repeat] = $stimFile
      pos = (0, -0.4)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackTime
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    ImageComponent image_shipCrash
      image = crashedShip.png
      pos = [0.7, -0.5]
      size = [0.6, 0.7]
      startVal [condition] = crashShow==3
      stopVal [duration (s)] = $feedbackTime
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    ImageComponent image_shipFull
      image = fullShip.png
      pos = [0.7, 0.5]
      size = [0.6, 0.7]
      startVal [condition] = crashShow==3
      stopVal [duration (s)] = $feedbackTime
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  Routine main_trialBackup
    TextComponent text
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Power up!
    CodeComponent CheckKeys_2
      Code Type = Auto->JS
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      Begin Routine:
        #reset round score to 0
        rscore = 0
        winE=rscore+1
        npumps=0
        maxPumps=effLevel#max presses to complete a trial
      Each Frame:
        if event.getKeys(['space']):
            npumps+=1
            if npumps>=maxPumps:
                achieved=True
               # continueRoutine=False
      End Routine:
        if npumps>=maxPumps:
           rscore=rscore+1

        #add current round score to total score
        tscore += rscore

        maintask.addData('# of presses', npumps)
        maintask.addData('trial score', rscore)
    CodeComponent barSize_2
      Code Type = Auto->JS
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      Begin Experiment:
        batterySize=0.00
        batteryMaxSize=0.55
      Begin Routine:
        #balloon image's starting size
        batterySize=0.00
        achieved=False
        nPumps=0
        batterySizeIncr = batteryMaxSize/100
      Each Frame:
        batterySize=npumps*batterySizeIncr
    CodeComponent countdownEasy_2
      Code Type = Py
      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(10)
            countdownStarted = True
        #7 second timer
      Each Frame:
        timeRemaining = countdownClock.getTime()

        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            countdownStarted = False
      End Routine:
        countdownStarted = False
    ImageComponent tank_2
      image = TankOnlyEmpt-01.png
      size = (1.5,2)
      startVal [time (s)] = 0
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    PolygonComponent background_2
      anchor = bottom-center
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = [0, -0.5]
      shape = rectangle
      size = [0.15, batteryMaxSize]
      startVal [time (s)] = 0.0
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    PolygonComponent barBody_2
      anchor = bottom-center
      fillColor = '#2b773e'
      lineColor = '#2b773e'
      pos [set every frame] = [0, -0.5]
      shape = rectangle
      size [set every frame] = $[.15, batterySize]
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator maintask loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 50},
      {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 77},
      {'Points': 6, 'FeedbackText1': 'You reached the planet, you get 6 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 6 rubies!', 'stimFile': 'image6.png', 'effLevel': 85},
      {'Points': 6, 'FeedbackText1': 'You reached the planet, you get 6 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 6 rubies!', 'stimFile': 'image6.png', 'effLevel': 79},
      {'Points': 4, 'FeedbackText1': 'You reached the planet, you get 4 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 4 rubies!', 'stimFile': 'image4.png', 'effLevel': 87},
      {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 77},
      {'Points': 3, 'FeedbackText1': 'You reached the planet, you get 3 rubies!', 'FeedbackText2': 'You did not have enough battery to reach the planet and missed 3 rubies!', 'stimFile': 'image3.png', 'effLevel': 66}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
    Routine reward_rating
    Routine effort_rating
    Routine cross
    Routine main_trial
    Routine Feedback_2
  LoopTerminator maintask
